CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Plate": "text", "FileLocation": "text", "Column": "integer", "Series": "text", "Frame": "text", "Well": "text", "Site": "text", "Dose": "text", "Field": "text", "ChannelNumber": "text", "PosNegCtrls": "text", "Cell_Line": "text", "WellNumber": "text", "Channel": "integer", "Row": "text"}
    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^Channel(?P<Channel> [0-9])-(?P<WellNumber>[0-9]{2})-(?P<Row>[A-Z])-(?P<Column>[0-9]{2})-(?P<Field>[0-9]{2}).Bmp
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    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Default Input Folder sub-folder|Documents\\RF\\CP
    Match file and image metadata:[{'Image Metadata': u'Row', 'CSV Metadata': u'Row'}, {'Image Metadata': u'Column', 'CSV Metadata': u'Column'}]
    Use case insensitive matching?:No
    Metadata file name:dose.csv

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Channel 1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Channel 2")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:GFP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:8|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
    Hidden:2
    Hidden:1
    Select an image to measure:GFP
    Select an image to measure:DNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei
    Run all metrics?:Yes
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
MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:GFP
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm

CalculateMath:[module_num:10|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
    Name the output measurement:IntensityRatio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_MeanIntensity_GFP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Intensity_MeanIntensity_GFP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToDatabase:[module_num:11|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:RF_DB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:DNA,GFP
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:96
    Select the plate metadata:Series
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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