CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0.TIF")
    Name to assign these images:Ch0
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2.TIF")
    Name to assign these images:Ch2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Ch0
    Name the output image:IllumCh0
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Ch2
    Name the output image:IllumCh2
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:Ch0
    Name the output image:CorrDNA
    Select the illumination function:IllumCh0
    Select how the illumination function is applied:Divide
    Select the input image:Ch2
    Name the output image:CorrGFP
    Select the illumination function:IllumCh2
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:No
    Set output image values greater than 1 equal to 1?:No

GrayToColor:[module_num:8|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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:CorrDNA
    Select the image to be colored green:CorrGFP
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    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:CorrGFP
    Number of pixels by which to expand the primary objects:30
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
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
EnhanceOrSuppressFeatures:[module_num:11|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
    Select the input image:CorrGFP
    Name the output image:SpecklesGFP
    Select the operation:Enhance
    Feature size:7
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:SpecklesGFP
    Name the primary objects to be identified:Speckles
    Typical diameter of objects, in pixel units (Min,Max):3,7
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:6.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Crop:[module_num:13|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
    Select the input image:CorrGFP
    Name the output image:CropGFP
    Select the cropping shape:Objects
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    Remove empty rows and columns?:No
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    Select the objects:Cells

IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:CropGFP
    Name the primary objects to be identified:SpklPerObject
    Typical diameter of objects, in pixel units (Min,Max):3,7
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:4
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:Speckles, SpklPerObject
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:16|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
    Select images to measure:CorrDNA, CorrGFP, SpecklesGFP
    Select objects to measure:Cells, Nuclei, Speckles, SpklPerObject

RelateObjects:[module_num:17|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
    Parent objects:Cells
    Child objects:SpklPerObject
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
DisplayDataOnImage:[module_num:18|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:ColorImage
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:ColorImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ch0
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents/ML_workshop/exercises/svm/cp/result
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ch0
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents/ML_workshop/exercises/svm/cp/result/annotate
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/ML_workshop/exercises/svm/cp/result
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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